CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:405
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:Hoescht
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:WGA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:Mitotracker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:Hoescht
    Name the output image:GaussianFilter
    Sigma:3

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:GaussianFilter
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBody
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Hoescht
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:CellBody
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:WGA
    Name the primary objects to be identified:Cell
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Mitotracker
    Name the primary objects to be identified:Mitochondria
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MeasureObjectNeighbors:[module_num:11|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Mitochondria
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:Yes
    Name the output image:ObjectNeighborCount
    Select colormap:Blues
    Retain the image of objects colored by percent of touching pixels?:Yes
    Name the output image:PercentTouching
    Select colormap:Oranges

EnhanceOrSuppressFeatures:[module_num:12|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
    Select the input image:Hoescht
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:5
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:13|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MorphologicalSkeleton:[module_num:14|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
    Select the input image:Threshold
    Name the output image:MorphologicalSkeleton

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:CellBody, Mitochondria, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectSkeleton:[module_num:16|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
    Select the seed objects:Mitochondria
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectSkeleton:[module_num:17|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
    Select the seed objects:Nuclei
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureImageAreaOccupied:[module_num:18|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Mitochondria, Nuclei

MeasureObjectIntensity:[module_num:19|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
    Select images to measure:Hoescht
    Select objects to measure:Mitochondria, Nuclei

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:WGA
    Select objects to measure:Cell

MeasureImageIntensity:[module_num:21|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
    Select images to measure:Hoescht, Mitotracker, WGA
    Measure the intensity only from areas enclosed by objects?:No
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
MaskImage:[module_num:22|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
    Select the input image:Mitotracker
    Name the output image:MaskedMito
    Use objects or an image as a mask?:Objects
    Select object for mask:Cell
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:MaskedMito
    Name the primary objects to be identified:MitoInCells
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MeasureObjectIntensity:[module_num:24|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
    Select images to measure:Mitotracker
    Select objects to measure:MitoInCells

ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/Users/sneha/Desktop/test_proj/output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cell|Location_MaxIntensity_Y_WGA,Cell|Location_MaxIntensity_Z_WGA,Cell|Location_MaxIntensity_X_WGA,Cell|Location_CenterMassIntensity_Z_WGA,Cell|Location_CenterMassIntensity_X_WGA,Cell|Location_CenterMassIntensity_Y_WGA,Cell|Location_Center_Z,Cell|Location_Center_X,Cell|Location_Center_Y,Cell|Intensity_StdIntensityEdge_WGA,Cell|Intensity_MaxIntensityEdge_WGA,Cell|Intensity_IntegratedIntensity_WGA,Cell|Intensity_StdIntensity_WGA,Cell|Intensity_MedianIntensity_WGA,Cell|Intensity_LowerQuartileIntensity_WGA,Cell|Intensity_UpperQuartileIntensity_WGA,Cell|Intensity_MeanIntensity_WGA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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