CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:404
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:Hoescht
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:WGA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:Mitotracker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:Hoescht
    Name the output image:GaussianFilter
    Sigma:3

GaussianFilter:[module_num:6|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
    Select the input image:Mitotracker
    Name the output image:GaussianFilter_Mito
    Sigma:3

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:GaussianFilter
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBody
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:WGA
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:CellBody
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:Mitochondria
    Select the method to identify the secondary objects:Propagation
    Select the input image:Mitotracker
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:Mitotracker
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:5
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:12|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MorphologicalSkeleton:[module_num:13|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
    Select the input image:Threshold
    Name the output image:MorphologicalSkeleton

MeasureImageSkeleton:[module_num:14|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
    Select an image to measure:MorphologicalSkeleton

CorrectIlluminationCalculate:[module_num:15|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enabled:False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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:No smoothing
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Morph:[module_num:16|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enabled:False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
    Select the input image:GaussianFilter_Mito
    Name the output image:Morph
    Select the operation to perform:skelpe
    Number of times to repeat operation:Forever
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
MeasureImageSkeleton:[module_num:17|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enabled:False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


MeasureObjectSkeleton:[module_num:18|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
    Select the seed objects:Nuclei
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    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectIntensity:[module_num:19|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


MeasureImageIntensity:[module_num:20|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
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureObjectSizeShape:[module_num:21|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
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No
