CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:405
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:Hoescht
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:WGA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:Mitotracker
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:Hoescht
    Name the output image:GaussianFilter
    Sigma:3

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:GaussianFilter
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBody
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Hoescht
    Number of pixels by which to expand the primary objects:50
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
SaveCroppedObjects:[module_num:8|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
    Objects:CellBody
    Directory:Default Output Folder|.
    Saved file format:png
    Do you want to save cropped images or object masks?:Images
    Image:Hoescht
